PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1536, 864]
  expName = InterleavedStaircase
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Please evaluate the quality differences between the two scenes.

        Press  ‘left’  if you think the stimulus on the left is of higher quality

        Press  ‘right’ if you think the stimulus on the right is of higer quality

        Press any key to start
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine set_condition
    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        imageSet = imageSetLvl;
        imageSetStr = imageSet.toString();
        setName = imageSetName;
        nRefImage = 8; //TO DO

        initStep = (nRefImage * 2);

        noOfMiniScenes  = 1;

        reversals = 0;
        trialCounter = 1;

        reversalsSharp = 0;
        reversalsFlat =  0;

        maxNoFlat = 10;


        levList = new Array(2);
        respList = new Array(2);
        kestList = new Array(2);
        reverseList = new Array(2);
        localTrialNo = new Array(2);


        globalTrialNo = 60;



        for(var i = 0; i < levList.length; i++)
        {
            levList[i]= new Array(noOfMiniScenes + 1);
            respList[i] = new Array(noOfMiniScenes + 1);
            kestList[i] = new Array(noOfMiniScenes + 1);
            reverseList[i] = new Array(noOfMiniScenes + 1);
            localTrialNo[i] = new Array(noOfMiniScenes + 1)
            for(var j = 1; j < levList[i].length; i++)
            {
                levList[i][j]= new Array(100).fill(0);
                respList[i][j] = new Array(100).fill(0);
                kestList[i][j] = new Array(100).fill(0);
                reverseList[i][j] = new Array(100).fill(0);
                localTrialNo[i][j] = 1;
            }

        }
  Routine trial
    CodeComponent kesten_stair
      Code Type = JS
      Begin JS Routine:
        leftImage = new Image();
        rightImage = new Image();

        staircase = 0;

        currentScene = Math.floor(Math.random() * noOfMiniScenes);
        currentStaircase = Math.random();
        found = false;
        trial = 1;

        if(trialCounter <= globalTrialNo/2)
        {
        //if ((Math.random() > 0.5)) {
            phi = 0.25;
            initN = (nRefImage * 2);
            staircase = 0;
            if(localTrialNo[staircase][currentScene] > 10)
                for(var i = 1; i <= noOfMiniScenes; i++)
                    if(localTrialNo[staircase][i] <= 10)
                        currentScene = i;

        }
        else {
        //if  ((Math.random() <= 0.5)){
            phi = 0.75;
            initN = (nRefImage / 2);
            staircase = 1;
            if(localTrialNo[staircase][currentScene] > 10)
                for(var i = 1; i <= noOfMiniScenes; i++)
                    if(localTrialNo[staircase][i] <= 10)
                        currentScene = i;
        }

        trial = localTrialNo[staircase][currentScene];

        if ((Math.random() > 0.5)) {
            refSide = 1;
        } else {
            refSide = (- 1);
        }
        compSide = (refSide * (- 1));

        if ((trial === 1)) {
            levList[staircase][currentScene][trial] = initN;
        } else
        {
            if ((trial === 2))
            {
                levList[staircase][currentScene][trial] = (initN - ((initStep / 2) * (kestList[staircase][currentScene][(trial - 1)] - phi)));
            }
            else
            {
                levList[staircase][currentScene][trial] = (levList[staircase][currentScene][(trial - 1)] - ((initStep / (reversals + 2)) * (kestList[staircase][currentScene][(trial - 1)] - phi)));
            }
        }
        if ((levList[staircase][currentScene][trial] > initN)) {
            levList[staircase][currentScene][trial] = initN;
        }

        if ((levList[staircase][currentScene][trial] < 1)) {
            levList[staircase][currentScene][trial] = 1;
        }
        console.log(trial);
        console.log(levList[staircase][currentScene][trial]);

        nCompQuality = Number.parseInt(round(levList[staircase][currentScene][trial]));
        comp_num = nCompQuality;


        if ((refSide === (- 1))) {
            leftImage.src = `stimuli/${imageSetStr}/${currentScene}/${nRefImage}_${setName}.png`;
            rightImage.src = `stimuli/${imageSetStr}/${currentScene}/${comp_num}_${setName}.png`;
        } else {
            leftImage.src = `stimuli/${imageSetStr}/${currentScene}/${comp_num}_${setName}.png`;
            rightImage.src = `stimuli/${imageSetStr}/${currentScene}/${nRefImage}_${setName}.png`;
        }
      End JS Routine:
        psychoJS.experiment.addData("Trial No.", trial);
        psychoJS.experiment.addData("Comp Side", (refSide * (- 1)));
        psychoJS.experiment.addData("Ref Num", nRefImage);
        psychoJS.experiment.addData("Level List", levList[trial]);
        psychoJS.experiment.addData("Bounce Num", comp_num);
        psychoJS.experiment.addData("Staircase", staircase);
        psychoJS.experiment.addData("Scene No", currentScene);

        kestResp = 0;
        if(staircase == 0)
        {
            if (((compSide < 0) && (resp.keys === "left"))) {
            kestResp = 1;
        }
        else
            {
                if (((compSide > 0) && (resp.keys === "right")))
                {
                    kestResp = 1;
                }
            }
        }
        else
        {
            if (((compSide > 0) && (resp.keys === "left"))) {
            kestResp = 1;
        } else {
            if (((compSide < 0) && (resp.keys === "right"))) {
                kestResp = 1;
            }
        }
            }

        kestList[trial] = kestResp;
        psychoJS.experiment.addData("comp>ref?", kestResp);
        if ((trial > 1)) {
            if ((kestList[trial] !== kestList[(trial - 1)])) {
                reversals += 1;
                reverseList[reversals] = levList[(trial - 1)];
            }
        }

        localTrialNo[staircase][currentScene]++;
        trialCounter = (trial + 1);
    ImageComponent leftImagePortrait
      image [set every repeat] = $leftImage
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent rightImagePortrait
      image [set every repeat] = $rightImage
      pos = (0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 5.5
      text = Please record your answer. 
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    KeyboardComponent resp
      allowedKeys = 'left','righ'
      forceEndRoutine = True
      startVal [time (s)] = 5.5
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  Routine end
Flow
  Routine Instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine set_condition
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 18
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
  Routine end
